PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = calibration
  keyboardBackend = ioHub
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Routines
  Routine calibration
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    PolygonComponent circle_cal_1
      fillColor = white
      pos = (-.711, 0.4)
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    PolygonComponent circle_cal_2
      fillColor = white
      pos = (0.711, 0.4)
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 3.1
      stopVal [duration (s)] = 3
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    PolygonComponent circle_cal_3
      fillColor = white
      pos = (-0.711, -0.4)
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 6.2
      stopVal [duration (s)] = 3
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    PolygonComponent circle_cal_4
      fillColor = white
      pos = (0.711, -0.4)
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 9.3
      stopVal [duration (s)] = 3
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    PolygonComponent circle_cal_5
      fillColor = white
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 12.4
      stopVal [duration (s)] = 3
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    CodeComponent code_cal
      Code Type = Py
      Before Experiment:
        import tobii_research as tr
        from pylsl import StreamInfo, StreamOutlet
        import psychopy.logging as log
        import time

        log.info("Creating LSL stream")
        #info = StreamInfo('Tobii Pro', 'Pupilometry', 2, 120, 'float32', 'myuidw43536')
        info = StreamInfo('Tobii Pro', 'Gaze', 4, 120, 'float32', 'myuidw43536')
        outlet = StreamOutlet(info)

        EYETRACKER_ADDRESS = "tobii-prp://TPFC1-010202448011"
        log.info(f"Connecting to tobii device: {EYETRACKER_ADDRESS}")
        et = tr.EyeTracker(EYETRACKER_ADDRESS)

        log.info(f"Eyetracker: {et}")

        gaze_data_samples = []
        gaze_left = [0,0]
        gaze_right = [0,0]

        def gaze_data_callback(gaze_data):
            global gaze_data_samples, gaze_left,  gaze_right
        #    log.info(f"Got gaze data: {gaze_data}")
        #    print(f"Got gaze data Validity: LV {gaze_data['left_gaze_point_validity']}, RV {gaze_data['right_gaze_point_validity']}")
        #    print(f"Got gaze data: L {gaze_data['left_gaze_point_on_display_area']}, R {gaze_data['right_gaze_point_on_display_area']}")
        #    print(f"Pupil diameter: L {gaze_data['right_pupil_diameter']}, R {gaze_data['right_pupil_diameter']}")
        #    if gaze_data["left_pupil_validity"]:
        #        log.data(f"Pupil diameter: L {gaze_data['left_pupil_diameter']}")
        #    if gaze_data["right_pupil_validity"]:
        #        log.data(f"Pupil diameter: R {gaze_data['right_pupil_diameter']}")
            if gaze_data['left_gaze_point_validity']:
                gaze_left = gaze_data['left_gaze_point_on_display_area']
            if gaze_data['right_gaze_point_validity']:
                gaze_right = gaze_data['right_gaze_point_on_display_area']
            outlet.push_sample([gaze_data['left_gaze_point_on_display_area'],
                                gaze_data['right_gaze_point_on_display_area'],
                                gaze_data['left_pupil_diameter'],
                                gaze_data['right_pupil_diameter']])

        #    gaze_data_samples.append(gaze_data)
      Begin Experiment:
        et.subscribe_to(tr.EYETRACKER_GAZE_DATA, gaze_data_callback, as_dictionary=True)
      Begin Routine:
        log.info("Start calibration")
        calibration = tr.ScreenBasedCalibration(et)

        calibration.enter_calibration_mode()
        points_to_calibrate = [circle_cal_1.pos, circle_cal_2.pos, circle_cal_3.pos, circle_cal_4.pos, circle_cal_5.pos]
        #points_to_calibrate = [(0,0), (0,1), (1,0), (1,1), (0.5, 0.5)]
        framerate = 60
      Each Frame:
        if t == 0 * framerate:
            status = calibration.collect_data(points_to_calibrate[0][0], points_to_calibrate[0][1])
        elif t == 3.1 * framerate:
            status = calibration.collect_data(points_to_calibrate[1][0], points_to_calibrate[1][1])
        elif t == 6.2 * framerate:
            status = calibration.collect_data(points_to_calibrate[2][0], points_to_calibrate[2][1])
        elif t == 9.3 * framerate:
            status = calibration.collect_data(points_to_calibrate[3][0], points_to_calibrate[3][1])
        elif t == 12.3 * framerate:
            status = calibration.collect_data(points_to_calibrate[4][0], points_to_calibrate[4][1])

        #    status = calibration.collect_data(point[0], point[1])
        #    log.info(f"Calibration returs: {status}")
      End Routine:
        calibration_result = calibration.compute_and_apply()
        log.info(f"Compute and apply returned {calibration_result.status} and collected at {len(calibration_result.calibration_points)} points.")
        calibration.leave_calibration_mode()
  Routine fix
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    PolygonComponent cross
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine feedback
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    PolygonComponent point_of_interest_l
      fillColor = limegreen
      shape = circle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
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    PolygonComponent point_of_interest_r
      fillColor = white
      shape = circle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
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    CodeComponent code_feedback
      Code Type = Py
      Each Frame:
        point_of_interest_l.pos = gaze_left
        point_of_interest_r.pos = gaze_right
        #point_of_interest_l.pos[0] -= 1
        #point_of_interest_l.pos[1] *= -1
        #point_of_interest_r.pos[0] -= 1
        #point_of_interest_l.pos[1] *= -1
        #
      End Routine:
        eyetracker.unsubscribe_from(tr.EYETRACKER_GAZE_DATA, gaze_data_callback)
  Routine instructions
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    TextComponent text_instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Observa los distintos puntos en la pantalla para calibrar el eyetracker.

        [Presiona la barra espaciadora para continuar]
    KeyboardComponent key_resp_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  Routine fix
  Routine calibration
  Routine feedback
